PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = simon
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine feedback
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    CodeComponent setFeedback
      Code Type = Py
      Begin Routine:
        # response.corr is 1 if the key matched correctAns, else 0
        if response.corr:
            fbText = 'Correct'
            fbColour = 'green'
        else:
            fbText = 'Wrong'
            fbColour = 'red'
    TextComponent feedbackText
      color [set every repeat] = $fbColour
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbText
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        A coloured square appears on the left or on the right.

        Respond to its COLOUR and ignore where it is:
        F = red
        J = green

        Answer as fast as you can without making mistakes.

        You start with a short practice with feedback.

        Press SPACE to start.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstructions
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    TextComponent mainInstructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Practice is over.

        Now the real experiment. There is no feedback from now on.

        Press SPACE to start.
    KeyboardComponent mainInstructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine mainInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator trials
  Routine goodbye
