PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = size_bisection
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent probe
      fillColor = white
      shape = circle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
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  Routine feedback
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    CodeComponent setFeedback
      Code Type = Py
      Begin Routine:
        # response.corr is 1 if the key matched correctAns, else 0
        if response.corr:
            fbText = 'Correct'
            fbColour = 'green'
        else:
            fbText = 'Wrong'
            fbColour = 'red'
    TextComponent feedbackText
      color [set every repeat] = $fbColour
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbText
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        One circle appears at a time.
        Is it the SMALL or the LARGE circle?

        F = small        J = large

        You start with a short practice with feedback.

        Press SPACE to start.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instructionsSmall
      fillColor = white
      pos = (-0.25, -0.15)
      shape = circle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    TextComponent instructionsSmallLabel
      letterHeight = 0.04
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text = SMALL
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    PolygonComponent instructionsLarge
      fillColor = white
      pos = (0.25, -0.15)
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent instructionsLargeLabel
      letterHeight = 0.04
      pos = (0.25, -0.3)
      startVal [time (s)] = 0.0
      text = LARGE
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  Routine mainInstructions
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    TextComponent mainInstructions_text
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Practice is over.

        Now circles of in-between sizes appear too.
        Is each one more like SMALL (F) or like LARGE (J)?
        There is no feedback. If you are not sure, guess.

        Press SPACE to start.
    KeyboardComponent mainInstructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent mainInstructionsSmall
      fillColor = white
      pos = (-0.25, -0.15)
      shape = circle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    TextComponent mainInstructionsSmallLabel
      letterHeight = 0.04
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text = SMALL
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    PolygonComponent mainInstructionsLarge
      fillColor = white
      pos = (0.25, -0.15)
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent mainInstructionsLargeLabel
      letterHeight = 0.04
      pos = (0.25, -0.3)
      startVal [time (s)] = 0.0
      text = LARGE
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditions = []
    conditionsFile = anchors.csv
    loopType = random
    nReps = 2
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine mainInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    Routine trial
  LoopTerminator trials
  Routine goodbye
