PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = duration_reproduction
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent disc
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine reproduce
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    TextComponent prompt
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      text = Hold SPACE
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
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  Routine feedback
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    CodeComponent setFeedback
      Code Type = Py
      Begin Routine:
        # Reproduction error relative to the true duration
        err = (response.duration - stimDur) / stimDur
        if abs(err) <= 0.1:
            fbText = 'Good!'
            fbColour = 'green'
        elif err < 0:
            fbText = f'Too short ({err:+.0%})'
            fbColour = 'orange'
        else:
            fbText = f'Too long ({err:+.0%})'
            fbColour = 'orange'
    TextComponent feedbackText
      color [set every repeat] = $fbColour
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbText
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        A white disc appears for a while. Watch how long it stays.

        Then "Hold SPACE" appears: press and HOLD the space bar
        for as long as the disc was on the screen, then release it.
        The disc is shown again while you hold the key.

        Do not count in your head.

        You start with a short practice with feedback.

        Press SPACE to start.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstructions
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    TextComponent mainInstructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Practice is over.

        Now the real experiment. There is no feedback from now on.

        Press SPACE to start.
    KeyboardComponent mainInstructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine reproduce
    Routine feedback
  LoopTerminator practice
  Routine mainInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    Routine trial
    Routine reproduce
  LoopTerminator trials
  Routine goodbye
