PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = orientation_reproduction
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    GratingComponent target
      mask = circle
      sf = 10
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      tex = sin
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  Routine adjust
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    CodeComponent adjustProbe
      Code Type = Py
      Begin Experiment:
        # A second keyboard, only for the arrow keys that rotate the probe
        adjustKb = keyboard.Keyboard()
        rotateSpeed = 90  # degrees per second while an arrow key is held
      Begin Routine:
        # TODO: set the random starting angle and reset timing
      Each Frame:
        # Rotate the probe while LEFT or RIGHT is held down
        # (waitRelease=False: pressed, not yet released; clear=False: just look)
        dt = t - lastT
        lastT = t
        if probe.status == STARTED:
            held = [k.name for k in adjustKb.getKeys(['left', 'right'],
                                                     waitRelease=False, clear=False)]
            if 'left' in held:
                probeOri -= rotateSpeed * dt
            if 'right' in held:
                probeOri += rotateSpeed * dt
            probe.ori = probeOri
      End Routine:
        # TODO: save the reported angle and signed error
    GratingComponent probe
      mask = circle
      sf = 10
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      tex = sin
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    KeyboardComponent confirm
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
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  Routine feedback
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    CodeComponent setFeedback
      Code Type = Py
      Begin Routine:
        # oriError was computed at the end of the 'adjust' Routine
        if abs(oriError) <= 10:
            fbText = f'Good! ({oriError:+.0f}°)'
            fbColour = 'green'
        else:
            fbText = f'Off by {oriError:+.0f}°'
            fbColour = 'orange'
    TextComponent feedbackText
      color [set every repeat] = $fbColour
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbText
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        A striped patch appears briefly. Remember its ORIENTATION.

        Then a second patch appears. Rotate it until it matches:
        hold LEFT / RIGHT arrow to rotate, press SPACE to confirm.

        You start with a short practice with feedback.

        Press SPACE to start.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstructions
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    TextComponent mainInstructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Practice is over.

        Now the real experiment. There is no feedback from now on.

        Press SPACE to start.
    KeyboardComponent mainInstructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine adjust
    Routine feedback
  LoopTerminator practice
  Routine mainInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    Routine trial
    Routine adjust
  LoopTerminator trials
  Routine goodbye
