PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual_search
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    CodeComponent makeDisplay
      Code Type = Py
      Begin Routine:
        # Build this trial's search display: one T among Ls (or only Ls).
        # setSize and targetPresent come from conditions.csv.
        # Each letter is made of two equally long bars, so T and L differ
        # only in where the bars meet. Corners of the shapes (x, y):
        s, w = 0.05, 0.01       # bar length and bar width (height units)
        h = s / 2
        T = [(-h, h), (h, h), (h, h - w), (w / 2, h - w),
             (w / 2, -h), (-w / 2, -h), (-w / 2, h - w), (-h, h - w)]
        L = [(-h, h), (-h + w, h), (-h + w, -h + w), (h, -h + w), (h, -h), (-h, -h)]
        # Items sit in random cells of a 6 x 4 grid, with a little jitter,
        # so they never overlap.
        cells = [(col, row) for col in range(6) for row in range(4)]
        shuffle(cells)
        items = []
        for i in range(____):
            col, row = cells[i]
            x = (col - 2.5) * 0.2 + (random() - 0.5) * 0.06
            y = (row - 1.5) * 0.2 + (random() - 0.5) * 0.06
            if i == 0 and targetPresent == ____:
                shape = T               # the target
            else:
                shape = L               # a distractor
            ori = randint(0, 4) * 90    # random rotation: 0, 90, 180 or 270 deg
            items.append(visual.ShapeStim(win, vertices=shape, pos=(x, y), ori=ori,
                                          fillColor='white', lineColor=None))
      Each Frame:
        # TODO: draw the letters after fixation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent response
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
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  Routine feedback
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    CodeComponent setFeedback
      Code Type = Py
      Begin Routine:
        # response.corr is 1 if the key matched correctAns, else 0
        if response.corr:
            fbText = 'Correct'
            fbColour = 'green'
        else:
            fbText = 'Wrong'
            fbColour = 'red'
    TextComponent feedbackText
      color [set every repeat] = $fbColour
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbText
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Look for the letter T among the Ls.
        The letters can be rotated.

        J = yes, there is a T
        F = no, there is no T

        Answer as fast as you can without making mistakes.

        You start with a short practice with feedback.

        Press SPACE to start.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstructions
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    TextComponent mainInstructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Practice is over.

        Now the real experiment. There is no feedback from now on.

        Press SPACE to start.
    KeyboardComponent mainInstructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine mainInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    Routine trial
  LoopTerminator trials
  Routine goodbye
